<OpenViBE-Scenario>
	<FormatVersion>1</FormatVersion>
	<Creator>OpenVIBE</Creator>
	<CreatorVersion>2.0.0</CreatorVersion>
	<Settings></Settings>
	<Inputs></Inputs>
	<Outputs></Outputs>
	<Boxes>
		<Box>
			<Identifier>(0x000003fe, 0x00000ecb)</Identifier>
			<Name>Signal display</Name>
			<AlgorithmClassIdentifier>(0x0055be5f, 0x087bdd12)</AlgorithmClassIdentifier>
			<Inputs>
				<Input>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Data</Name>
				</Input>
				<Input>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Stimulations</Name>
				</Input>
				<Input>
					<TypeIdentifier>(0x6ab26b81, 0x0f8c02f3)</TypeIdentifier>
					<Name>Channel Units</Name>
				</Input>
			</Inputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x5de046a6, 0x086340aa)</TypeIdentifier>
					<Name>Display Mode</Name>
					<DefaultValue>Scan</DefaultValue>
					<Value>Scan</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x33a30739, 0x00d5299b)</TypeIdentifier>
					<Name>Auto vertical scale</Name>
					<DefaultValue>Per channel</DefaultValue>
					<Value>Global</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>Scale refresh interval (secs)</Name>
					<DefaultValue>5</DefaultValue>
					<Value>5</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>Vertical Scale</Name>
					<DefaultValue>100</DefaultValue>
					<Value>100</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>Vertical Offset</Name>
					<DefaultValue>0</DefaultValue>
					<Value>0</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>Time Scale</Name>
					<DefaultValue>10</DefaultValue>
					<Value>10</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2cdb2f0b, 0x12f231ea)</TypeIdentifier>
					<Name>Bottom ruler</Name>
					<DefaultValue>true</DefaultValue>
					<Value>true</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2cdb2f0b, 0x12f231ea)</TypeIdentifier>
					<Name>Left ruler</Name>
					<DefaultValue>false</DefaultValue>
					<Value>false</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2cdb2f0b, 0x12f231ea)</TypeIdentifier>
					<Name>Multiview</Name>
					<DefaultValue>false</DefaultValue>
					<Value>false</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>272.000000</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>544.000000</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0x92c056a7, 0x2dc71aff)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x527ad68d, 0x16d746a0)</Identifier>
					<Value></Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc46b3d00, 0x3e0454e1)</Identifier>
					<Value>(0x00000000, 0x002a23aa)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc73e83ec, 0xf855c5bc)</Identifier>
					<Value>false</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>9</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xcfad85b0, 0x7c6d841c)</Identifier>
					<Value>3</Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x000007d9, 0x0000245f)</Identifier>
			<Name>3D Topography</Name>
			<AlgorithmClassIdentifier>(0xc709ea84, 0xb577d910)</AlgorithmClassIdentifier>
			<Inputs>
				<Input>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Matrix</Name>
				</Input>
			</Inputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x330306dd, 0x74a95f98)</TypeIdentifier>
					<Name>Channel Localisation</Name>
					<DefaultValue>${AdvancedViz_ChannelLocalisation}</DefaultValue>
					<Value>${AdvancedViz_ChannelLocalisation}</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>Gain</Name>
					<DefaultValue>1</DefaultValue>
					<Value>1</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x79a9edeb, 0x245d83fc)</TypeIdentifier>
					<Name>Caption</Name>
					<DefaultValue></DefaultValue>
					<Value></Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x3d3c7c7f, 0xef0e7129)</TypeIdentifier>
					<Name>Color</Name>
					<DefaultValue>${AdvancedViz_DefaultColorGradient}</DefaultValue>
					<Value>${AdvancedViz_DefaultColorGradient}</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>416</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>464</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0xa291db4a, 0x5f4fcbfc)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x527ad68d, 0x16d746a0)</Identifier>
					<Value></Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>4</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xcfad85b0, 0x7c6d841c)</Identifier>
					<Value>1</Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x00002726, 0x0000531f)</Identifier>
			<Name>Acquisition client</Name>
			<AlgorithmClassIdentifier>(0x35d225cb, 0x3e6e3a5f)</AlgorithmClassIdentifier>
			<Outputs>
				<Output>
					<TypeIdentifier>(0x403488e7, 0x565d70b6)</TypeIdentifier>
					<Name>Experiment information</Name>
				</Output>
				<Output>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Signal stream</Name>
				</Output>
				<Output>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Stimulations</Name>
				</Output>
				<Output>
					<TypeIdentifier>(0x013df452, 0xa3a8879a)</TypeIdentifier>
					<Name>Channel localisation</Name>
				</Output>
				<Output>
					<TypeIdentifier>(0x6ab26b81, 0x0f8c02f3)</TypeIdentifier>
					<Name>Channel units</Name>
				</Output>
			</Outputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x79a9edeb, 0x245d83fc)</TypeIdentifier>
					<Name>Acquisition server hostname</Name>
					<DefaultValue>${AcquisitionServer_HostName}</DefaultValue>
					<Value>${AcquisitionServer_HostName}</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x007deef9, 0x2f3e95c6)</TypeIdentifier>
					<Name>Acquisition server port</Name>
					<DefaultValue>1024</DefaultValue>
					<Value>1024</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>160.000000</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>544.000000</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0x0d4656c0, 0xc95b1fa8)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc46b3d00, 0x3e0454e1)</Identifier>
					<Value>(0x00000000, 0x0057d189)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc73e83ec, 0xf855c5bc)</Identifier>
					<Value>false</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc80ce8af, 0xf699f813)</Identifier>
					<Value>5</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>2</Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x00006c8d, 0x00005eff)</Identifier>
			<Name>Generic stream writer</Name>
			<AlgorithmClassIdentifier>(0x09c92218, 0x7c1216f8)</AlgorithmClassIdentifier>
			<Inputs>
				<Input>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Input stream 1</Name>
				</Input>
				<Input>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Input stream 2</Name>
				</Input>
			</Inputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x330306dd, 0x74a95f98)</TypeIdentifier>
					<Name>Filename</Name>
					<DefaultValue>${Player_ScenarioDirectory}/signals/record-[$core{date}-$core{time}].ov</DefaultValue>
					<Value>${Player_ScenarioDirectory}/signals/record-[$core{date}-$core{time}].ov</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2cdb2f0b, 0x12f231ea)</TypeIdentifier>
					<Name>Use compression</Name>
					<DefaultValue>false</DefaultValue>
					<Value>false</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>272.000000</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>384.000000</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0x89a08108, 0xc8d1fac1)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x527ad68d, 0x16d746a0)</Identifier>
					<Value></Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc46b3d00, 0x3e0454e1)</Identifier>
					<Value>(0x00000000, 0x00023a6b)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc73e83ec, 0xf855c5bc)</Identifier>
					<Value>false</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>2</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xcfad85b0, 0x7c6d841c)</Identifier>
					<Value>1</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xfba64161, 0x65304e21)</Identifier>
					<Value></Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x00007e7f, 0x00001714)</Identifier>
			<Name>Stimulation listener</Name>
			<AlgorithmClassIdentifier>(0x65731e1d, 0x47de5276)</AlgorithmClassIdentifier>
			<Inputs>
				<Input>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Stimulation stream 1</Name>
				</Input>
			</Inputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0xa88b3667, 0x0871638c)</TypeIdentifier>
					<Name>Log level to use</Name>
					<DefaultValue>Debug</DefaultValue>
					<Value>Information</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>272.000000</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>672.000000</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0xf451ad91, 0x14c75f86)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc46b3d00, 0x3e0454e1)</Identifier>
					<Value>(0x00000000, 0x00119045)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc73e83ec, 0xf855c5bc)</Identifier>
					<Value>false</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>1</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xcfad85b0, 0x7c6d841c)</Identifier>
					<Value>1</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xfba64161, 0x65304e21)</Identifier>
					<Value></Value>
				</Attribute>
			</Attributes>
		</Box>
	</Boxes>
	<Links>
		<Link>
			<Identifier>(0x000018f6, 0x000043dd)</Identifier>
			<Source>
				<BoxIdentifier>(0x00002726, 0x0000531f)</BoxIdentifier>
				<BoxOutputIndex>2</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x000003fe, 0x00000ecb)</BoxIdentifier>
				<BoxInputIndex>1</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x00002193, 0x00006de6)</Identifier>
			<Source>
				<BoxIdentifier>(0x00002726, 0x0000531f)</BoxIdentifier>
				<BoxOutputIndex>4</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x000003fe, 0x00000ecb)</BoxIdentifier>
				<BoxInputIndex>2</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x0000350a, 0x00003b44)</Identifier>
			<Source>
				<BoxIdentifier>(0x00002726, 0x0000531f)</BoxIdentifier>
				<BoxOutputIndex>2</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x00006c8d, 0x00005eff)</BoxIdentifier>
				<BoxInputIndex>1</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x00003d3c, 0x000078c6)</Identifier>
			<Source>
				<BoxIdentifier>(0x00002726, 0x0000531f)</BoxIdentifier>
				<BoxOutputIndex>2</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x00007e7f, 0x00001714)</BoxIdentifier>
				<BoxInputIndex>0</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x00006ce3, 0x00001abc)</Identifier>
			<Source>
				<BoxIdentifier>(0x00002726, 0x0000531f)</BoxIdentifier>
				<BoxOutputIndex>1</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x00006c8d, 0x00005eff)</BoxIdentifier>
				<BoxInputIndex>0</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x00007437, 0x0000097c)</Identifier>
			<Source>
				<BoxIdentifier>(0x00002726, 0x0000531f)</BoxIdentifier>
				<BoxOutputIndex>1</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x000003fe, 0x00000ecb)</BoxIdentifier>
				<BoxInputIndex>0</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x00007e4a, 0x00007d7c)</Identifier>
			<Source>
				<BoxIdentifier>(0x00002726, 0x0000531f)</BoxIdentifier>
				<BoxOutputIndex>1</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x000007d9, 0x0000245f)</BoxIdentifier>
				<BoxInputIndex>0</BoxInputIndex>
			</Target>
		</Link>
	</Links>
	<Comments>
		<Comment>
			<Identifier>(0x0000430c, 0x00007f16)</Identifier>
			<Text>This set of scenarios illustrates how to make
&lt;b&gt;event related potential (ERP)&lt;/b&gt; recordings with
OpenViBE.

The main scenario is the #2. It displays cues and 
records data meanwhile, taking care to tag the data 
with the events appropriately.

What is actually done with the recording is outside
the scope of this tutorial. In principle you can
try to classify it, convert it to Matlab for further
analysis, etc.</Text>
			<Attributes>
				<Attribute>
					<Identifier>(0x473d9a43, 0x97fc0a97)</Identifier>
					<Value>208.000000</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x7234b86b, 0x2b8651a5)</Identifier>
					<Value>112.000000</Value>
				</Attribute>
			</Attributes>
		</Comment>
	</Comments>
	<Metadata>
		<Entry>
			<Identifier>(0x0000775c, 0x000078ff)</Identifier>
			<Type>(0x3bcce5d2, 0x43f2d968)</Type>
			<Data>[{"boxIdentifier":"(0x000003fe, 0x00000ecb)","childCount":0,"identifier":"(0x00004ed7, 0x00002591)","parentIdentifier":"(0xffffffff, 0xffffffff)","type":3},{"boxIdentifier":"(0xffffffff, 0xffffffff)","childCount":1,"height":320,"identifier":"(0x00007ad6, 0x00004865)","name":"Default window","parentIdentifier":"(0xffffffff, 0xffffffff)","type":1,"width":475},{"boxIdentifier":"(0xffffffff, 0xffffffff)","childCount":1,"identifier":"(0x000025c7, 0x00007b2b)","index":0,"name":"Default tab","parentIdentifier":"(0x00007ad6, 0x00004865)","type":2},{"boxIdentifier":"(0x000007d9, 0x0000245f)","childCount":0,"identifier":"(0x0000577c, 0x0000690e)","index":0,"parentIdentifier":"(0x000025c7, 0x00007b2b)","type":3}]</Data>
		</Entry>
	</Metadata>
	<Attributes>
		<Attribute>
			<Identifier>(0x790d75b8, 0x3bb90c33)</Identifier>
			<Value>Jussi T. Lindgren</Value>
		</Attribute>
		<Attribute>
			<Identifier>(0x8c1fc55b, 0x7b433dc2)</Identifier>
			<Value></Value>
		</Attribute>
		<Attribute>
			<Identifier>(0x9f5c4075, 0x4a0d3666)</Identifier>
			<Value>ERP : Monitor signal</Value>
		</Attribute>
		<Attribute>
			<Identifier>(0xf36a1567, 0xd13c53da)</Identifier>
			<Value></Value>
		</Attribute>
		<Attribute>
			<Identifier>(0xf6b2e3fa, 0x7bd43926)</Identifier>
			<Value></Value>
		</Attribute>
		<Attribute>
			<Identifier>(0xf8034a49, 0x8b3f37cc)</Identifier>
			<Value>Inria</Value>
		</Attribute>
	</Attributes>
</OpenViBE-Scenario>