OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.0)
0x790d75b8 = Krzysztof Kotowski
0x8c1fc55b = 0.1
0x9f5c4075 = Wronka experiment
0xf6b2e3fa = Psychology
0xf8034a49 = Silesian University of Technology
Comment
  The main ERP Recording scenario
Comment
  Modify the lua script in the box to change
  what is displayed and when
Comment
  NOTE: When recording,

  - Acquisition Server must of course be in acquiring state
  - drift correction in acquisition server should be DISABLED
  - remember to check impedances every time
  - do NOT move AS or Designer windows during recording
  - visually check the signal with the other scenario
  to make sure the amp or AS hasn't crashed
  - all boxes marked as debug should be muted during run
  - set the Display Cue Image box to fullscreen
Comment
  These two boxes will pass their stimulations
  directly to the Acquisition Server using TCP Tagging.
  The markers related to rendered cues/audio
  are delayed to be immediately post-stimulus.

  The stimulation filtering is to make sure AS
  doesn't receive the same markers twice.
Comment
  Wronka experiment setup:
  - Environment: dimly lit, sound-attenuated, electrically-shielded
  - Screen: 70 cm from user, face 2,5' x 3,5' visual angle = 3.05cm x 4.28cm
  Timing:
  - 500ms of fixation cross
  - 750ms of clear screen
  - 300ms of face stimuli
  - 1200ms break after button press
Settings
  PrimaryButton = M
  Task = FGT
  ExperimentalUnits = 8

Keyboard stimulator
  Filename = ${Player_ScenarioDirectory}/scripts/keyboard_to_stimulation.txt
-> Experiment script => #1
  Lua Script = ${Player_ScenarioDirectory}/scripts/experiment-timeline.lua
  Task = $var{Task}
  PrimaryButton = $var{PrimaryButton}
  ExperimentalUnits = $var{ExperimentalUnits}
-> Display cue image
  Display images in full screen = true
  Scale images to fit = true
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  Cue Image 1 = ${Player_ScenarioDirectory}/assets/001_a.png
  Stimulation 1 = OVTK_StimulationId_Label_01
  Cue Image 2 = ${Player_ScenarioDirectory}/assets/001_n.png
  Stimulation 2 = OVTK_StimulationId_Label_02
  Cue Image 3 = ${Player_ScenarioDirectory}/assets/001_h.png
  Stimulation 3 = OVTK_StimulationId_Label_03
  Cue Image 4 = ${Player_ScenarioDirectory}/assets/cross.png
  Stimulation 4 = OVTK_GDF_Cross_On_Screen
  Cue Image 5 = ${Player_ScenarioDirectory}/assets/rest.png
  Stimulation 5 = OVTK_StimulationId_RestStart
  Cue Image 6 = ${Player_ScenarioDirectory}/assets/002_a.png
  Stimulation 6 = OVTK_StimulationId_Label_04
  Cue Image 7 = ${Player_ScenarioDirectory}/assets/002_h.png
  Stimulation 7 = OVTK_StimulationId_Label_05
  Cue Image 8 = ${Player_ScenarioDirectory}/assets/002_n.png
  Stimulation 8 = OVTK_StimulationId_Label_06
  Cue Image 9 = ${Player_ScenarioDirectory}/assets/010_a.png
  Stimulation 9 = OVTK_StimulationId_Label_07
  Cue Image 10 = ${Player_ScenarioDirectory}/assets/010_h.png
  Stimulation 10 = OVTK_StimulationId_Label_08
  Cue Image 11 = ${Player_ScenarioDirectory}/assets/010_n.png
  Stimulation 11 = OVTK_StimulationId_Label_09
  Cue Image 12 = ${Player_ScenarioDirectory}/assets/017_a.png
  Stimulation 12 = OVTK_StimulationId_Label_0A
  Cue Image 13 = ${Player_ScenarioDirectory}/assets/017_n.png
  Stimulation 13 = OVTK_StimulationId_Label_0B
  Cue Image 14 = ${Player_ScenarioDirectory}/assets/017_h.png
  Stimulation 14 = OVTK_StimulationId_Label_0C
  Cue Image 15 = ${Player_ScenarioDirectory}/assets/021_a.png
  Stimulation 15 = OVTK_StimulationId_Label_0D
  Cue Image 16 = ${Player_ScenarioDirectory}/assets/021_h.png
  Stimulation 16 = OVTK_StimulationId_Label_0E
  Cue Image 17 = ${Player_ScenarioDirectory}/assets/021_n.png
  Stimulation 17 = OVTK_StimulationId_Label_0F
  Cue Image 18 = ${Player_ScenarioDirectory}/assets/045_a.png
  Stimulation 18 = OVTK_StimulationId_Label_10
  Cue Image 19 = ${Player_ScenarioDirectory}/assets/045_n.png
  Stimulation 19 = OVTK_StimulationId_Label_11
  Cue Image 20 = ${Player_ScenarioDirectory}/assets/045_h.png
  Stimulation 20 = OVTK_StimulationId_Label_12
  Cue Image 21 = ${Player_ScenarioDirectory}/assets/030_n.png
  Stimulation 21 = OVTK_StimulationId_Label_13
  Cue Image 22 = ${Player_ScenarioDirectory}/assets/030_a.png
  Stimulation 22 = OVTK_StimulationId_Label_14
  Cue Image 23 = ${Player_ScenarioDirectory}/assets/030_h.png
  Stimulation 23 = OVTK_StimulationId_Label_15
  Cue Image 24 = ${Player_ScenarioDirectory}/assets/046_a.png
  Stimulation 24 = OVTK_StimulationId_Label_16
  Cue Image 25 = ${Player_ScenarioDirectory}/assets/046_h.png
  Stimulation 25 = OVTK_StimulationId_Label_17
  Cue Image 26 = ${Player_ScenarioDirectory}/assets/046_n.png
  Stimulation 26 = OVTK_StimulationId_Label_18
  Cue Image 27 = ${Player_ScenarioDirectory}/assets/clear.png
  Stimulation 27 = OVTK_StimulationId_Label_19
  Cue Image 28 = ${Player_ScenarioDirectory}/assets/start.png
  Stimulation 28 = OVTK_StimulationId_Label_1C
  Cue Image 29 = ${Player_ScenarioDirectory}/assets/przebieg.png
  Stimulation 29 = OVTK_StimulationId_Label_1D
  Cue Image 30 = ${Player_ScenarioDirectory}/assets/$var{Task}_$var{PrimaryButton}.png
  Stimulation 30 = OVTK_StimulationId_Label_1E
  Cue Image 31 = ${Player_ScenarioDirectory}/assets/uwagi.png
  Stimulation 31 = OVTK_StimulationId_Label_1F
  Cue Image 32 = ${Player_ScenarioDirectory}/assets/end_rest.png
  Stimulation 32 = OVTK_StimulationId_Label_1A
#1 -> Player Controller "Stop Experiment"
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Acquisition client => #4
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream=#4.Signal stream, Stimulations stream=#1 -> CSV File Writer
  Filename = ${Player_ScenarioDirectory}/signals/csv/record-$var{Task}-$var{PrimaryButton}-[$core{date}-$core{time}].csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input stream 1=#4.Experiment information, Input stream 2=#4.Signal stream, Input stream 3=#1, Input stream 4=#4.Channel units -> Generic stream writer "ov file"
  Filename = ${Player_ScenarioDirectory}/signals/ov/record-$var{Task}-$var{PrimaryButton}-[$core{date}-$core{time}].ov
  Use compression = false
