OpenViBE-Scenario(FormatVersion=1, Creator=OpenVIBE, CreatorVersion=2.0.0)
0x790d75b8 = Jussi T. Lindgren
0x9f5c4075 = ERP : Replay File
0xf8034a49 = Inria

Generic stream reader => #0
  Filename = C:/Users/Krzysztof/Desktop/EEG_experiment/openvibe_wronka_2/signals/ov/record-[2017.11.10-10.51.02].ov
#0.Output stream 2 -> Stimulation listener
  Log level to use = Information
Data=#0.Output stream 1, Stimulations=#0.Output stream 2, Channel Units=#0.Output stream 4 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Global
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.Output stream 1 -> Channel Selector "P7;P8;O2;O1"
  Channel List = P7;P8;O2;O1
  Action = Select
  Channel Matching Method = Smart
-> Common Average Reference => #4
-> 3D Topography
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Gain = 1
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
#4 -> 3D Tomographic Visualization
  Gain = 1
  Caption =
  Translucency = 20
  Color = ${AdvancedViz_DefaultColorGradient}
Signal=#0.Output stream 1, Stimulations=#0.Output stream 2 -> General statistics generator
  Filename for saving = ${Path_UserData}/statistics-dump.xml
#0.Output stream 1 -> Discrete Wavelet Transform
  Wavelet type = db5
  Wavelet decomposition levels = 3
Trigger=#0.Output stream 2, ERP1=#0.Output stream 1 -> ERP plot
  Filename final figure =
  Trigger to save figure = OVTK_GDF_Cross_On_Screen
  Line color 1 = 0,0,0
  Line label 1 = curve 1
